CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:masks
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:masks
    Name the output object:nuclei
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nuclei
    Name the objects to be identified:cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:masks
    Number of pixels by which to expand the primary objects:1
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:cells
    Name the output image:cellmask
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:cellmask
    Select method for constructing file names:From image filename
    Select image name for file prefix:masks
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|/data/masks_expanded
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
